#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\ClosedContainer\\FlipTube\\Fliptube.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\8Channel\\8Channel.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\96Channel\\96Channel.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\TemperatureControl\\HeaterCooler\\HeaterCooler.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\TemperatureControl\\HeaterShaker\\HeaterShaker.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Timer\\Timer.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Tip\\FTR\\FTR.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Tip\\NTR\\NTR.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Transport\\Gripper\\Gripper.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Transport\\IPG\\IPG.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Vacuum\\Vacuum.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLTrcLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\DeckLoadingDialog\\5 Position FTR Carrier\\5PositionFTRCarrier.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\DeckLoadingDialog\\5 Position Plate Carrier\\5PositionPlateCarrier.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace DRIVER {
  function Abort(  ) void ;
  function ActionServerProcess( device & ML_STAR ) void ;
  function ServeRequest( device & ML_STAR, object & i_JSONObject ) void ;
  function StateServerProcess( device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    FLIPTUBE::_InitLibrary();
    _8CHANNEL::_InitLibrary();
    _96CHANNEL::_InitLibrary();
    HEATERCOOLER::_InitLibrary();
    HEATERSHAKER::_InitLibrary();
    TIMER::_InitLibrary();
    FTR::_InitLibrary();
    NTR::_InitLibrary();
    GRIPPER::_InitLibrary();
    IPG::_InitLibrary();
    VACUUM::_InitLibrary();
    _5POSITIONFTRCARRIER::_InitLibrary();
    _5POSITIONPLATECARRIER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    FLIPTUBE::_ExitLibrary();
    _8CHANNEL::_ExitLibrary();
    _96CHANNEL::_ExitLibrary();
    HEATERCOOLER::_ExitLibrary();
    HEATERSHAKER::_ExitLibrary();
    TIMER::_ExitLibrary();
    FTR::_ExitLibrary();
    NTR::_ExitLibrary();
    GRIPPER::_ExitLibrary();
    IPG::_ExitLibrary();
    VACUUM::_ExitLibrary();
    _5POSITIONFTRCARRIER::_ExitLibrary();
    _5POSITIONPLATECARRIER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  function ServeRequest( device & ML_STAR, object & i_JSONObject ) void {
    private object EndpointOutputDataJSONObject;
    private variable ModuleName;
    private variable CommandName;
    private variable JSONObjectString;
    MECC::TraceComment(Translate("\n\n###################### START COMMAND ###################### "));
    JSONPARSER::GetEndpointOutputData(i_JSONObject, EndpointOutputDataJSONObject);
    HSLJsonLib::GetJson(EndpointOutputDataJSONObject, JSONObjectString);
    TrcTrace(Translate(""), JSONObjectString);
    ModuleName = JSONPARSER::GetJSONElement(EndpointOutputDataJSONObject, Translate("Module Name:"));
    CommandName = JSONPARSER::GetJSONElement(EndpointOutputDataJSONObject, Translate("Command Name:"));
    if (ModuleName == "ClosedContainer FlipTube")
    {
      FLIPTUBE::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "DeckLoadingDialog FTR5Position")
    {
      _5POSITIONFTRCARRIER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "DeckLoadingDialog Plate5Position")
    {
      _5POSITIONPLATECARRIER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Pipette Pipette8Channel")
    {
      _8CHANNEL::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Pipette Pipette96Channel")
    {
      _96CHANNEL::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "TemperatureControl HeaterCooler")
    {
      HEATERCOOLER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "TemperatureControl HeaterShaker")
    {
      HEATERSHAKER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Timer")
    {
      TIMER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Tip FTR")
    {
      FTR::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Tip NTR")
    {
      NTR::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Transport Gripper")
    {
      GRIPPER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Transport IPG")
    {
      IPG::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Vacuum")
    {
      VACUUM::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nModule not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  function ActionServerProcess( device & ML_STAR ) void {
    private variable None;
    private object JSONObject;
    private variable IsReady;
    private timer timer1;
    {
      None = 0;
      while ("Infinite" == "Infinite")
      {
        None = None + 1;
        IsReady = ACTIONSERVERENDPOINTS::GetNextCommand(600, JSONObject);
        if( 0 == timer1.SetTimer(10) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (IsReady != 0)
        {
          ServeRequest(ML_STAR, JSONObject);
        }
      }
    }
  }

  function StateServerProcess( device & ML_STAR ) void {
    private object JSONObject;
    private variable IsReady;
    private variable None;
    private timer timer1;
    {
      None = 0;
      while ("Infinite" == "Infinite")
      {
        None = None + 1;
        IsReady = STATESERVERENDPOINTS::GetNextCommand(600, JSONObject);
        if( 0 == timer1.SetTimer(10) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (IsReady != 0)
        {
          ServeRequest(ML_STAR, JSONObject);
        }
      }
    }
  }

  function Abort(  ) void {
    STATESERVERENDPOINTS::ServerKill();
    ACTIONSERVERENDPOINTS::ServerKill();
  }
} // library namespace
