#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\JSONParser\\WebServerJSONParser.hs_"
#include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\ABNWebServerCommands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HEATERCOOLER {
  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function StartTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    WEBSERVERJSONPARSER::_InitLibrary();
    ABNWEBSERVERCOMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    WEBSERVERJSONPARSER::_ExitLibrary();
    ABNWEBSERVERCOMMANDS::_ExitLibrary();
  }

  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ComPort;
    private variable Name;
    private variable Trash;
    private variable HandleArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    ComPort = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ComPort:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::Connect(ComPort, 0, Trash, HandleArray);
    Keys.SetSize(0);
    Keys.AddAsLast(Translate("HandleID"));
    Values.SetSize(0);
    Values.AddAsLast(HandleArray.ElementAt( 1 -1));
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function StartTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    Temperature = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Temperature:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::SetTemperature(HandleID, Temperature, Temperature, Temperature, HamiltonHeaterCooler::_FALSE, 0);
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::StopTemperatureControl(HandleID);
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::GetTemperature(HandleID, Temperature);
    Keys.SetSize(0);
    Keys.AddAsLast(Translate("Temperature"));
    Values.SetSize(0);
    Values.AddAsLast(Temperature);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Connect")
    {
      Connect(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StartTemperatureControl")
    {
      StartTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetTemperature")
    {
      GetTemperature(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopTemperatureControl")
    {
      StopTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
