#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\JSONParser\\WebServerJSONParser.hs_"
#include "HSLDevLib.hsl"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\ABNWebServerCommands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NTR {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function LoadTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function TipsAvailable( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function TipsRemaining( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    WEBSERVERJSONPARSER::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    ABNWEBSERVERCOMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    WEBSERVERJSONPARSER::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    ABNWEBSERVERCOMMANDS::_ExitLibrary();
  }

  private function LoadTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable Name;
    private variable TipSequence;
    private sequence Sequence;
    private variable RackWasteSequence;
    private sequence WasteSequence;
    private sequence Waste;
    private variable GeneratedRackWasteSequence;
    private variable SequenceAvailable;
    private sequence GeneratedWasteSequence;
    private variable LabID;
    private variable PosID;
    private variable GripperSequence;
    private sequence Gripper;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    TipSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    RackWasteSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RackWasteSequence:"));
    GripperSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripperSequence:"));
    GeneratedRackWasteSequence = StrConcat2(TipSequence, Translate("_GeneratedWasteSequence"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    DevGetSequenceRef(ML_STAR, RackWasteSequence, WasteSequence);
    DevGetSequenceRef(ML_STAR, GripperSequence, Gripper);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    SequenceAvailable = DevGetSequenceRef(ML_STAR, GeneratedRackWasteSequence, GeneratedWasteSequence);
    if (SequenceAvailable == 0)
    {
      MECC::TraceComment(Translate("Sequence not found in deck layout"));
      abort;
    }
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, Sequence, TipSequence, Translate(""), 1, 1000);
    VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(WasteSequence, 0, Waste, ML_STAR);
    LabID = SeqGetLabwareId(Waste);
    PosID = SeqGetPositionId(Waste);
    SeqRemoveAll(GeneratedWasteSequence);
    SeqAdd(GeneratedWasteSequence, LabID, PosID);
    GeneratedWasteSequence.SetCount(1);
    GeneratedWasteSequence.SetCurrentPosition(1);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, Sequence, TipSequence, GeneratedWasteSequence, Gripper, 1, 1, 0, Sequence, 0, 8, 0, 1, Translate(""), 0);
    Keys.SetSize(0);
    Keys.AddAsLast(Translate("GeneratedWasteSequence"));
    Values.SetSize(0);
    Values.AddAsLast(GeneratedRackWasteSequence);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function TipsAvailable( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable TipSequence;
    private variable NumPositions;
    private variable Name;
    private sequence Sequence;
    private variable EndPosition;
    private variable CurrentPosition;
    private variable PositionsLeft;
    private variable GeneratedRackWasteSequence;
    private variable GripperSequence;
    private sequence Gripper;
    private sequence GeneratedWasteSequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    TipSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    GeneratedRackWasteSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GeneratedRackWasteSequence:"));
    GripperSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripperSequence:"));
    NumPositions = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:NumPositions:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    DevGetSequenceRef(ML_STAR, GeneratedRackWasteSequence, GeneratedWasteSequence);
    DevGetSequenceRef(ML_STAR, GripperSequence, Gripper);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    CurrentPosition = Sequence.GetCurrentPosition();
    EndPosition = Sequence.GetCount();
    PositionsLeft = EndPosition - CurrentPosition;
    PositionsLeft = PositionsLeft + 1;
    if (PositionsLeft < 8)
    {
      if (EndPosition == 768)
      {
        State = 0;
        Message = Translate("Not enough tips available. Please load more tips.");
        Keys.SetSize(0);
        Keys.AddAsLast(Translate("TipPosition"));
        Values.SetSize(0);
        Values.AddAsLast(0);
        ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
        return;
      }
    }
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, Sequence, TipSequence, GeneratedWasteSequence, Gripper, 1, 1, 0, Sequence, 0, 8, 0, 1, Translate(""), 0);
    Keys.SetSize(0);
    Keys.AddAsLast(Translate("TipPosition"));
    Values.SetSize(0);
    Values.AddAsLast(CurrentPosition);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function TipsRemaining( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CurrentPosition;
    private variable CustomErrorHandling;
    private variable TipSequence;
    private variable Remaining;
    private variable Name;
    private variable AbsoluteEnd;
    private variable State;
    private sequence Sequence;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    TipSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    CurrentPosition = Sequence.GetCurrentPosition();
    AbsoluteEnd = SeqGetTotal(Sequence);
    Remaining = AbsoluteEnd - CurrentPosition;
    Keys.SetSize(0);
    Keys.AddAsLast(Translate("NumRemaining"));
    Values.SetSize(0);
    Values.AddAsLast(Remaining);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "LoadTips")
    {
      LoadTips(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "TipsAvailable")
    {
      TipsAvailable(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "TipsRemaining")
    {
      TipsRemaining(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
