#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\JSONParser\\WebServerJSONParser.hs_"
#include "HSLVacuuBrandPump.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\ABNWebServerCommands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VACUUM {
  private function GetPressure( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Initialize( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StartPressureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopPressureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    WEBSERVERJSONPARSER::_InitLibrary();
    ABNWEBSERVERCOMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    WEBSERVERJSONPARSER::_ExitLibrary();
    ABNWEBSERVERCOMMANDS::_ExitLibrary();
  }

  private function Initialize( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ComPort;
    private variable Name;
    private variable PumpID;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    ComPort = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ComPort:"));
    PumpID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLStarBVSLib::BVSInitialize(PumpID, ComPort);
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function StartPressureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PumpID;
    private variable Pressure;
    private variable Name;
    private variable AmbientPressure;
    private variable VacuumPressure;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PumpID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    Pressure = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Pressure:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    AmbientPressure = HSLStarBVSLib::BVSGetAmbientPressure(PumpID);
    VacuumPressure = AmbientPressure - Pressure;
    HSLVacuuBrandPump::StartPressureControl(PumpID, VacuumPressure, 999999, Translate("y"), 1);
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function StopPressureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PumpID;
    private variable Name;
    private timer VacuumTimer;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PumpID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLVacuuBrandPump::StopPumpImmediatly(PumpID);
    HSLVacuuBrandPump::OpenAirAdmittanceValve(PumpID);
    if( 0 == VacuumTimer.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == VacuumTimer.WaitTimer(hslFalse, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function GetPressure( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PumpID;
    private variable Pressure;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PumpID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    Pressure = HSLVacuuBrandPump::ReqActualPressure(PumpID);
    Keys.SetSize(0);
    Keys.AddAsLast(Translate("Pressure"));
    Values.SetSize(0);
    Values.AddAsLast(Pressure);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Initialize")
    {
      Initialize(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetPressure")
    {
      GetPressure(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StartPressureControl")
    {
      StartPressureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopPressureControl")
    {
      StopPressureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
